PsychoPy2experiment version="1.80.00"
em5hY3plbmllLGN6Y2lvbmthCmN6ZXJ3b255LGdyZWVuCmN6ZXJ3b255LHllbGxvdwpjemVyd29u
eSxibHVlCsW8w7PFgnR5LHJlZArFvMOzxYJ0eSxncmVlbgrFvMOzxYJ0eSxibHVlCm5pZWJpZXNr
aSx5ZWxsb3cKbmllYmllc2tpLGdyZWVuCm5pZWJpZXNraSxyZWQKemllbG9ueSx5ZWxsb3cKemll
bG9ueSxyZWQKemllbG9ueSxibHVlCg==
em5hY3plbmllLGN6Y2lvbmthCmN6ZXJ3b255LHJlZArFvMOzxYJ0eSx5ZWxsb3cKemllbG9ueSxn
cmVlbgpuaWViaWVza2ksYmx1ZQo=
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bnkKbmllemdvZG55Cm5pZXpnb2RueQpuaWV6Z29kbnkK
Pool
  Resources
  Resource nie_zgodne.csv date="1427882443.71"
  Resource zgodne.csv date="1427882443.71"
  Resource trening.csv date="1427882443.71"
  Resource blok.csv date="1427882443.71"
Settings
  saveTags = True
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  sendTags = False
  Units = use prefs
  doSignal = False
  saveSignal = False
  Window size (pixels) = [1366, 768]
  Screen = 1
  obciDataDirectory = ~/ventures_experiment_data/
  serialTriggerDevice = /dev/ttyUSB0
  applianceDevicePath = /dev/ttyUSB0
  Save log file = False
  Save wide csv file = False
  applianceIntensity = 250
  Data filename = '~/ventures_experiment_data' + os.path.sep +'%s_%s_%s' %(expInfo['participant'], 'ventures_test_dual', expInfo['date'])
  expName = stroop_psych
  Full-screen window = True
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Routines
  Routine koniec_posturo
    TextComponent text_4
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TagOnFlipComponent tagger_7
      tagDescription [routine] = {}
      stopVal [duration (frames)] = 1
      durationEstim = 0.02
      tagName [routine] = '{}_{}'.format($postural_task, 'stop')
      startVal [time (s)] = 0.0
  Routine instrukcja_2
    CodeComponent code_2
      Begin Experiment:
        import time
    TextComponent text_8
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        INSTRUKCJA


        (wciśnij spację, żeby przejść dalej)
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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    TagOnFlipComponent tagger_5
      tagDescription [experiment] = {'value':time.time()}
      stopVal [duration (frames)] = 1
      durationEstim = 0.02
      tagName [experiment] = timestamp
      startVal [time (s)] = 0.0
  Routine nie_zgodne
    TextComponent text_2
      color [set every repeat] = $czcionka
      text [set every repeat] = $znaczenie
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code
      Begin Routine:
        if blok == 'zgodny':
            break
    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      selectionMask = [image_3]
      startVal [time (s)] = 0.0
      saveMouseState = on click
    ImageComponent image_3
      opacity = 0
      startVal [time (s)] = 0.0
      size = [3.0, 3.0]
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    TagOnFlipComponent tagger_2
      tagDescription [routine] = {'czcionka':czcionka, 'znaczenie':znaczenie}
      stopVal [duration (frames)] = 1
      durationEstim = 0.02
      tagName [routine] = $blok
      startVal [time (s)] = 0.0
  Routine papa
    TextComponent text_10
      text = Dziękujemy za poświęcony czas.
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine zgodne
    TextComponent text
      color [set every repeat] = $czcionka
      text [set every repeat] = $znaczenie
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent start_zgodne
      Begin Experiment:
        blok = 'zgodny'
      Begin Routine:
        if blok == 'niezgodny':
            break
    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      selectionMask = [image_2]
      startVal [time (s)] = 0.0
      saveMouseState = on click
    ImageComponent image_2
      opacity = 0
      startVal [time (s)] = 0.0
      size = [3.0, 3.0]
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    TagOnFlipComponent tagger
      tagDescription [routine] = {'czcionka':czcionka, 'znaczenie':znaczenie}
      stopVal [duration (frames)] = 1
      durationEstim = 0.02
      tagName [routine] = $blok
      startVal [time (s)] = 0.0
  Routine odniesienie
    TextComponent text_20
      stopVal [duration (s)] = 40
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Najpierw jednaj zamknij oczy i zrelaksuj się.

        Za około 30 sekund usłyszysz dźwięk i wtedy je otwóż.

        Zamknij oczy teraz.
    SoundComponent sound_1
      sound = D
      stopVal [duration (s)] = 1
      startVal [time (s)] = 40
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    TagOnFlipComponent tagger_6
      tagDescription [experiment] = {}
      stopVal [time (s)] = 40
      durationEstim = 0.02
      tagName [experiment] = baseline
      startVal [time (s)] = 10
  Routine instrukcja
    TextComponent text_7
      text = (wciśnij spację aby przejść dalej)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine poczatek_posturo
    TextComponent text_5
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TagOnFlipComponent tagger_8
      tagDescription [routine] = {}
      stopVal [duration (frames)] = 1
      durationEstim = 0.02
      tagName [routine] = '{}_{}'.format($postural_task, 'start')
      startVal [time (s)] = 0.0
  Routine przerwa
    TextComponent text_9
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TagOnFlipComponent tagger_3
      tagDescription [experiment] = {}
      stopVal [time (s)] = 10
      durationEstim = 0.02
      tagName [experiment] = break
      startVal [time (s)] = 0.0
  Routine trening
    TextComponent text_17
      color [set every repeat] = $czcionka
      text [set every repeat] = $znaczenie
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_3
      text = TRENING
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      opacity = 0
      startVal [time (s)] = 0.0
      size = [3.0, 3.0]
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      selectionMask = [image]
      startVal [time (s)] = 0.0
      saveMouseState = on click
Flow
  Routine instrukcja_2
  LoopInitiator trenujemy loopType="TrialHandler"
    conditionsFile = ./trening.pkl
    loopType = no-repeat random
    nReps = 1
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    conditions:
      [{u'znaczenie': u'czerwony', u'czcionka': u'green', u'poprawna_odp': u': 8'},
      {u'znaczenie': u'czerwony', u'czcionka': u'yellow', u'poprawna_odp': u': 8'},
      {u'znaczenie': u'czerwony', u'czcionka': u'blue', u'poprawna_odp': u': 8'},
      {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'red', u'poprawna_odp': u': 9'},
      {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'green', u'poprawna_odp': u': 9'},
      {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'blue', u'poprawna_odp': u': 9'},
      {u'znaczenie': u'niebieski', u'czcionka': u'yellow', u'poprawna_odp': u': 7'},
      {u'znaczenie': u'niebieski', u'czcionka': u'green', u'poprawna_odp': u': 7'},
      {u'znaczenie': u'niebieski', u'czcionka': u'red', u'poprawna_odp': u': 7'},
      {u'znaczenie': u'zielony', u'czcionka': u'yellow', u'poprawna_odp': u': 9'},
      {u'znaczenie': u'zielony', u'czcionka': u'red', u'poprawna_odp': u': 0'},
      {u'znaczenie': u'zielony', u'czcionka': u'blue', u'poprawna_odp': u': 0'},
      {u'znaczenie': u'czerwony', u'czcionka': u'red', u'poprawna_odp': u': 8'},
      {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'yellow', u'poprawna_odp': u': 9'},
      {u'znaczenie': u'zielony', u'czcionka': u'green', u'poprawna_odp': u': 0'},
      {u'znaczenie': u'niebieski', u'czcionka': u'blue', u'poprawna_odp': u': 7'}]
    Routine trening
  LoopTerminator trenujemy
  LoopInitiator posturo loopType="TrialHandler"
    conditionsFile = ./postural_tasks.pkl
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'postural_task': u'ss'},
      {u'postural_task': u'ss_bacznosc'},
      {u'postural_task': u'ss_gabka'}]
    Routine instrukcja
    Routine poczatek_posturo
    LoopInitiator losowanko loopType="TrialHandler"
      conditionsFile = ./bloki.pkl
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'blok': u'zgodny'},
        {u'blok': u'niezgodny'},
        {u'blok': u'zgodny'},
        {u'blok': u'niezgodny'}]
      LoopInitiator zgod loopType="TrialHandler"
        conditionsFile = ./zgodne.pkl
        loopType = no-repeat random
        nReps = 3
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        conditions:
          [{u'znaczenie': u'czerwony', u'czcionka': u'red'},
          {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'yellow'},
          {u'znaczenie': u'zielony', u'czcionka': u'green'},
          {u'znaczenie': u'niebieski', u'czcionka': u'blue'}]
        Routine zgodne
      LoopTerminator zgod
      LoopInitiator nie_zgod loopType="TrialHandler"
        conditionsFile = ./nie_zgodne.pkl
        loopType = no-repeat random
        nReps = 1
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        conditions:
          [{u'znaczenie': u'czerwony', u'czcionka': u'green'},
          {u'znaczenie': u'czerwony', u'czcionka': u'yellow'},
          {u'znaczenie': u'czerwony', u'czcionka': u'blue'},
          {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'red'},
          {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'green'},
          {u'znaczenie': u'\u017c\xf3\u0142ty', u'czcionka': u'blue'},
          {u'znaczenie': u'niebieski', u'czcionka': u'yellow'},
          {u'znaczenie': u'niebieski', u'czcionka': u'green'},
          {u'znaczenie': u'niebieski', u'czcionka': u'red'},
          {u'znaczenie': u'zielony', u'czcionka': u'yellow'},
          {u'znaczenie': u'zielony', u'czcionka': u'red'},
          {u'znaczenie': u'zielony', u'czcionka': u'blue'}]
        Routine nie_zgodne
      LoopTerminator nie_zgod
    LoopTerminator losowanko
    Routine koniec_posturo
  LoopTerminator posturo
  Routine papa
