PsychoPy2experiment version="1.62.02"
Settings
  Monitor = testMonitor
  color = white
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save log file = False
  Experiment info = {'participant':'ID01', 'session':001}
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine test_b
    TextComponent lkhhguyu
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Mrugaj teraz.
        Jeśli jesteś gotowy naciśnij SPACE.
    KeyboardComponent resposoewoewoiew
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine int4
    TextComponent uivgtdv
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Skupiaj swoją uwagę na znaku +
        na środku ekranu.

        +

        Staraj się mrugać tylko wtedy,
        gdy pojawi się taka instrukcja.
        Aby przejść dalej naciśnij SPACE.
    KeyboardComponent respiojoi
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine baseline_inst
    TextComponent lkslkdlkdkdkdk
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Za chwilę na minutę na ekranie pojawi się znak +.
        W tym czasie rozluźnij się i po prostu patrz na +.
        Po tym rozpocznie się właściwy eksperyment.
        Jeśli jesteś gotów, naciśnij SPACE.
    KeyboardComponent respkdlfjsdlkf
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine blink_sth
    TextComponent slsdfdkeifjfk
      duration = 2.0
      letterHeight = 0.1
      startTime = 0.0
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    CodeComponent code
      Begin Routine:
        if after_blink_break == 1:
            continue
  Routine blink
    TextComponent xxx
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Mrugaj teraz.

        Jeśli jesteś gotowy naciśnij SPACE.
    KeyboardComponent respkl
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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    CodeComponent code2
      Begin Experiment:
        trials_count = 0
        trials_to_blink = kamil_consts.BLINK_MAX
        after_blink_break = 1
      Each Frame:
        respkl.keys = ''
      Begin Routine:
        trials_count += 1
        if not (trials_count % trials_to_blink == 0):
            after_blink_break = 1
            continue
        else:
            after_blink_break = 0
            trials_count = 0
            trials_to_blink = randint(kamil_consts.BLINK_MIN, kamil_consts.BLINK_MAX)
  Routine int5
    TextComponent sodfsdlkj
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Wciśnij klawisz COLOR_FOR_EMOTION zawsze wtedy,
        kiedy prezentowane słowo będzie związane z
        emocjami,
        a klawisz COLOR_FOR_NON_EMOTION jeśli będzie to słowo neutralne.
        Nie naciskaj żadnego z klawiszy,
        jeśli będzie to słowo Drewno.
        Aby przejść do sesji treningowej naciśnij SPACE.
    KeyboardComponent resplkdsjwo
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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    CodeComponent codesdfdsfsg
      Begin Routine:
        my_metadata = {'emotional_button':'BUTTON_FOR_EMOTION','non-emotional_button':'BUTTON_FOR_NON_EMOTION'}
      End Experiment:
        ff = open(filename+'.metadata.pytxt', 'w')
        ff.write(str(my_metadata))
        ff.close()
  Routine trial
    TextComponent t_fix
      color = black
      text = +
      duration = 1000.0
      letterHeight = 0.1
      startTime = 100.0
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    TextComponent t_word
      color = black
      text [set every repeat] = $word
      duration = 1001.0
      letterHeight = 0.1
      startTime = 101.0
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    KeyboardComponent t_resp
      forceEndTrial = False
      storeResponseTime = True
      startTime = 102.0
      allowedKeys = ['BUTTON_FOR_EMOTION', 'BUTTON_FOR_NON_EMOTION']
      duration = 1002.0
      store = first key
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    CodeComponent code
      Begin Experiment:
        curr_time = 0
        import time
        import os
        import kamil_consts, kamil_helper
        kamil_helper.create_words_file()
        trials=data.TrialHandler(nReps=1, method='sequential', extraInfo=expInfo,
            trialList=data.importTrialList('words.csv'))
      Each Frame:
        if (s_st[1]<= t < (s_st[1]+s_dur[1])):
            if curr_time == 0:
            #a first frame of an image
            #send trigger, save image onset data
            #expand image start time (st) so that
            #a time needed for sending a trigger will not
            #influence image duration
                before_time = time.time()
                #send trigger ...
                kamil_helper.send()
                curr_time = time.time()
                trials.addData('onset_time', str("%.5f"%curr_time))
                diff_time = curr_time - before_time
                for i in range(1, kamil_consts.NUM_OF_VALS):
                    s_st[i] = s_st[i] + diff_time
                t_resp.clock=core.Clock()
      Begin Routine:
        curr_time = 0
        s_st = list(kamil_consts.s_st)
        s_dur = list(kamil_consts.s_dur)

        #Set first variable duration time (fixation)
        s_dur[0] = float(fix_time)
        for i in range(1, kamil_consts.NUM_OF_VALS):
            s_st[i] = float(fix_time)
      End Routine:
        if len(t_resp.keys)==0:
            trials.addData('t_resp.keys','')
            trials.addData('t_resp.rt', -1)
      End Experiment:
        os.remove(filename+'.xlsx')
        trials.saveAsExcel(filename+'.xlsx', sheetName='trials',
            stimOut=['word', 'group', 'fix_time', ],
            dataOut=['all_raw'] #dataOut=['n','all_mean','all_std', 'all_raw']
            )
  Routine int6
    TextComponent lkhoh
      color = black
      text = Aby przejść do właściwego badania naciśnij SPACE.
      letterHeight = 0.08
      startTime = 0.0
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    KeyboardComponent resplkgikh
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine int1
    TextComponent dsf
      color = black
      text = Zapraszamy do udziału w badaniu.
      duration = 2.0
      letterHeight = 0.08
      startTime = 0.0
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  Routine int3
    TextComponent apoidf
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Postaraj się odpowiadać jak najszybciej potrafisz.
        Ważne jest, żeby usiąść w wygodnej pozycji z
        lekko przymrużonymi oczyma.
        Aby przejść dalej naciśnij SPACE.
    KeyboardComponent khklhjpj
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine int2
    TextComponent uiuiyhiu
      color = black
      letterHeight = 0.08
      startTime = 0.0
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      text:
        Twoje zadanie będzie polegało na czytaniu i
        ocenianiu słów pojawiających się kolejno na
        ekranie.
        Wciśnij klawisz COLOR_FOR_EMOTION zawsze wtedy,
        kiedy prezentowane słowo będzie związane z
        emocjami,
        a klawisz COLOR_FOR_NON_EMOTION jeśli będzie to słowo neutralne.
        Nie naciskaj żadnego z klawiszy,
        jeśli będzie to słowo Drewno.
        Aby przejść dalej naciśnij SPACE.
    KeyboardComponent resplkhlkljlk
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine test
    TextComponent fxxxxx
      color = black
      text = +
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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    TextComponent lkhkkki
      color = black
      text [set every repeat] = $word
      duration = 1.0
      letterHeight = 0.1
      startTime = 1.0
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    KeyboardComponent respkljlkj
      forceEndTrial = False
      storeResponseTime = False
      startTime = 1.0
      allowedKeys = ['space']
      duration = 2.0
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  Routine bye
    TextComponent lksjwpepowkf
      color = black
      text = Dziękuję za udział w badaniu.
      letterHeight = 0.08
      startTime = 0.0
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    KeyboardComponent respkjftess
      forceEndTrial = True
      storeResponseTime = False
      startTime = 0.0
      allowedKeys = ['space']
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  Routine baseline
    TextComponent aaassssss
      color = black
      text = +
      duration = 60.0
      letterHeight = 0.1
      startTime = 0.0
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    CodeComponent codekjljlk
      Begin Routine:
        my_metadata['baseline_start_timestamp'] = repr(time.time())
        my_metadata['baseline_length'] = str(60.0)
Flow
  Routine int1
  Routine int2
  Routine int3
  Routine int4
  Routine int5
  LoopInitiator trialskjhk loopType="TrialHandler"
    loopType = sequential
    nReps = 1
    trialList = [{u'word': u'drewno', u'group': u'P3', u'fix_time': u'0.94188181573529184'}, {u'word': u'Duma', u'group': u'P3', u'fix_time': u'1.1077069847578576'}, {u'word': u'drewno', u'group': u'P3', u'fix_time': u'0.70838919063333994'}, {u'word': u'drewno', u'group': u'P3', u'fix_time': u'0.70838919063333994'}, {u'word': u'Obowi\u0105zkowo\u015b\u0107', u'group': u'P3', u'fix_time': u'0.7585713779556208'}]
    trialListFile = samples.csv
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    Routine test
  LoopTerminator trialskjhk
  Routine baseline_inst
  Routine baseline
  Routine test_b
  Routine int6
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
    trialList = [{u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.0799281030754604'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.2180509632507477'}, {u'group': u'Neutr2', u'word': u'Logowanie', u'fix_time': u'0.9139319736109226'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.3327645237078787'}, {u'group': u'Neutr2', u'word': u'My\u015blenie', u'fix_time': u'1.4005183467978046'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.83484911199798018'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.84136731743214288'}, {u'group': u'Neutr2', u'word': u'Przekszta\u0142canie', u'fix_time': u'1.1634648633723133'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.89786940803484128'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.70399280096748329'}, {u'group': u'Neutr2', u'word': u'Przekonywanie', u'fix_time': u'0.57909387284657177'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.2536525313176226'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.65355678754631297'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.4302135660504218'}, {u'group': u'Neutr2', u'word': u'Og\u0142aszanie', u'fix_time': u'0.91164278694906875'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.93802994013175389'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.0544748258987497'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.89904220205712371'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.84232272582228385'}, {u'group': u'Neutr2', u'word': u'Tworzenie', u'fix_time': u'1.2766538145134054'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.0079525527209081'}, {u'group': u'Neutr2', u'word': u'Obliczanie', u'fix_time': u'1.4562155366895104'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.1407544467645254'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.1889666424828644'}, {u'group': u'Neutr2', u'word': u'Integrowanie', u'fix_time': u'0.90137026275164089'}, {u'group': u'Neutr2', u'word': u'Programowanie', u'fix_time': u'1.1837107343200679'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.3312164618741171'}, {u'group': u'Neutr2', u'word': u'Milczenie', u'fix_time': u'1.272522540693874'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.0207574319073354'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.2547570422253216'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.2857018525222088'}, {u'group': u'Neutr2', u'word': u'Udowadnianie', u'fix_time': u'1.2910716721721403'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.351592745054143'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'0.53991309853478908'}, {u'group': u'Neutr2', u'word': u'Wdra\u017canie', u'fix_time': u'0.7092599828809848'}, {u'group': u'Neutr2', u'word': u'drewno', u'fix_time': u'1.1149822219054071'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.660065651460368'}, {u'group': u'P3', u'word': u'Honor', u'fix_time': u'1.4974109927846573'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.2191454420668091'}, {u'group': u'P3', u'word': u'Wytrwa\u0142o\u015b\u0107', u'fix_time': u'0.54004474480269538'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.81068721846637737'}, {u'group': u'P3', u'word': u'Ulepszenie', u'fix_time': u'0.6470212197455828'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.1111590569140342'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.85762065600973469'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.2687419925405505'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.4640027621314669'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.75223175969146017'}, {u'group': u'P3', u'word': u'Odwaga', u'fix_time': u'0.95595666290597747'}, {u'group': u'P3', u'word': u'Satysfakcja', u'fix_time': u'0.89561738957515469'}, {u'group': u'P3', u'word': u'Obowi\u0105zkowo\u015b\u0107', u'fix_time': u'1.3345461052926266'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.6029583648638368'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.4660719520358629'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.2808539961436014'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.4664657285260776'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.56635040411560766'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.79212951250760433'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.0643563632580317'}, {u'group': u'P3', u'word': u'Sumienno\u015b\u0107', u'fix_time': u'1.4086818272927082'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.94067932694574963'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.4821147651621069'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.4129325809904554'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.0547805704627304'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.397220210364853'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'1.2369222584160589'}, {u'group': u'P3', u'word': u'Godno\u015b\u0107', u'fix_time': u'0.95206857102703779'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.55478923678188974'}, {u'group': u'P3', u'word': u'Duma', u'fix_time': u'1.2529703449669518'}, {u'group': u'P3', u'word': u'Punktualno\u015b\u0107', u'fix_time': u'0.66669314910981836'}, {u'group': u'P3', u'word': u'Cz\u0142owiecze\u0144stwo', u'fix_time': u'1.0243308082947897'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.7826085508325008'}, {u'group': u'P3', u'word': u'Systematyczno\u015b\u0107', u'fix_time': u'1.1803008743324566'}, {u'group': u'P3', u'word': u'drewno', u'fix_time': u'0.57339572197307864'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.8558294521427191'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.85881801331756757'}, {u'group': u'Neutr1', u'word': u'Je\u017cd\u017cenie', u'fix_time': u'0.66345257548253089'}, {u'group': u'Neutr1', u'word': u'\u017beglowanie', u'fix_time': u'0.68947481487787576'}, {u'group': u'Neutr1', u'word': u'Chodzenie', u'fix_time': u'1.0129644626398817'}, {u'group': u'Neutr1', u'word': u'Bieganie', u'fix_time': u'0.82661302576413354'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.1353389885391256'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.66523455827836009'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.2638795645767966'}, {u'group': u'Neutr1', u'word': u'Maszerowanie', u'fix_time': u'1.4716784287197293'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.60106587209618123'}, {u'group': u'Neutr1', u'word': u'P\u0142ywanie', u'fix_time': u'1.2668071241872396'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.84110231206637254'}, {u'group': u'Neutr1', u'word': u'Nurkowanie', u'fix_time': u'1.1926161037339509'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.2764328818045874'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.6866540604345529'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.4761498537111037'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.1795786758203626'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.3644114002369048'}, {u'group': u'Neutr1', u'word': u'Gotowanie', u'fix_time': u'1.4224211710512471'}, {u'group': u'Neutr1', u'word': u'Pieczenie', u'fix_time': u'1.4595037201584624'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.84191507415100386'}, {u'group': u'Neutr1', u'word': u'Ta\u0144czenie', u'fix_time': u'0.90296809665443334'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.2290096970819269'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.0022604885273312'}, {u'group': u'Neutr1', u'word': u'Skakanie', u'fix_time': u'0.64251630675345761'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.72299987104120511'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.61150857536065584'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.4273130164023662'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.225494495097847'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.1292957909894481'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.66408998098340177'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.67547456150678231'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'1.3596492725906133'}, {u'group': u'Neutr1', u'word': u'drewno', u'fix_time': u'0.93231600527599168'}, {u'group': u'Neutr1', u'word': u'Wios\u0142owanie', u'fix_time': u'0.65701106944286713'}, {u'group': u'N3', u'word': u'Tch\xf3rzostwo', u'fix_time': u'0.974908514702021'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.2338372843780825'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.74787543543278456'}, {u'group': u'N3', u'word': u'Nies\u0142owno\u015b\u0107', u'fix_time': u'0.63424959008129089'}, {u'group': u'N3', u'word': u'Zgrzeszenie', u'fix_time': u'1.4127589666731066'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.4866413814931163'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.75212573335808153'}, {u'group': u'N3', u'word': u'Za\u017cenowanie', u'fix_time': u'0.56602098079120644'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.0448525073665902'}, {u'group': u'N3', u'word': u'Kompromitacja', u'fix_time': u'0.57219731028645671'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.50826286404768106'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.434946021675815'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.4301596503087073'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.6218269467469516'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.87232757856016863'}, {u'group': u'N3', u'word': u'Zawstydzenie', u'fix_time': u'1.4217139701633552'}, {u'group': u'N3', u'word': u'Ha\u0144ba', u'fix_time': u'1.1567549808585873'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.1279976674572507'}, {u'group': u'N3', u'word': u'Egoizm', u'fix_time': u'0.91812147237487851'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.4313732339206737'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.73110232241989903'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.60317703310997406'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.77541436968500943'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.4117935102628145'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.2242592168644675'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.1147880941230208'}, {u'group': u'N3', u'word': u'Wstyd', u'fix_time': u'0.90028689232312831'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.86165784043003835'}, {u'group': u'N3', u'word': u'Zawiedzenie', u'fix_time': u'0.68785609757066368'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.1218947233182226'}, {u'group': u'N3', u'word': u'Oboj\u0119tno\u015b\u0107', u'fix_time': u'1.2466407735399099'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'0.67911689754532945'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.1139394879197757'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.2404331237266115'}, {u'group': u'N3', u'word': u'drewno', u'fix_time': u'1.1028109369634391'}, {u'group': u'N3', u'word': u'Nieczu\u0142o\u015b\u0107', u'fix_time': u'0.73039401834809203'}, {u'group': u'P1', u'word': u'Oczyszczenie', u'fix_time': u'1.3215097287541815'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.0762135184408135'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.82772286796846806'}, {u'group': u'P1', u'word': u'Ulga', u'fix_time': u'0.7569143197103968'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.55290102133775132'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.3822057958282918'}, {u'group': u'P1', u'word': u'Ukojenie', u'fix_time': u'0.56376566615688994'}, {u'group': u'P1', u'word': u'Wyzdrowienie', u'fix_time': u'0.78060906932317187'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.1378698245737762'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.51653940932724407'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.64575302809559787'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.0845179867092394'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.95243913226329324'}, {u'group': u'P1', u'word': u'Uwolnienie', u'fix_time': u'1.0919848439862381'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.66324810306419479'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.1934851126668979'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.92643729639396022'}, {u'group': u'P1', u'word': u'Uspokojenie', u'fix_time': u'0.63611794595688353'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.69151101861655973'}, {u'group': u'P1', u'word': u'Wyzwolenie', u'fix_time': u'0.54301335942006501'}, {u'group': u'P1', u'word': u'Uratowanie', u'fix_time': u'0.90268232643814605'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.337278748615097'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.1228314961188761'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'1.2245239500371159'}, {u'group': u'P1', u'word': u'Odzyskanie', u'fix_time': u'0.76826884684654528'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.89365123620166009'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.64060508582223752'}, {u'group': u'P1', u'word': u'Wypoczynek', u'fix_time': u'0.99506015029635131'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.53537778240398226'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.95204239655886613'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.76718569792652014'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.79234571908360163'}, {u'group': u'P1', u'word': u'Odpr\u0119\u017cenie', u'fix_time': u'1.0862326729621277'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.82993682805135427'}, {u'group': u'P1', u'word': u'Zrelaksowanie', u'fix_time': u'0.55685880718963088'}, {u'group': u'P1', u'word': u'drewno', u'fix_time': u'0.81710426573605011'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.4267540717580203'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.2345191961955175'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.1359406253193036'}, {u'group': u'N1', u'word': u'Zagro\u017cenie', u'fix_time': u'1.3063464418657968'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.86789123597238838'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.1510161060035784'}, {u'group': u'N1', u'word': u'\u015amier\u0107', u'fix_time': u'1.0550818201980694'}, {u'group': u'N1', u'word': u'Przera\u017cenie', u'fix_time': u'0.91910996541061152'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.3921672947594153'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.0422781449064651'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.1100744655977139'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.0094676914112735'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.97616314252500291'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.1063496448141237'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.94160690932076929'}, {u'group': u'N1', u'word': u'Przemoc', u'fix_time': u'0.71683618154397732'}, {u'group': u'N1', u'word': u'Choroba', u'fix_time': u'1.3999980633608415'}, {u'group': u'N1', u'word': u'Cierpienie', u'fix_time': u'0.97400573669930368'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.0656462898505303'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.5016315853480573'}, {u'group': u'N1', u'word': u'Zniewolenie', u'fix_time': u'1.1854869606159335'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.75088842940853584'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.1274140173300871'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.50800261420719806'}, {u'group': u'N1', u'word': u'Frustracja', u'fix_time': u'1.1241084300820059'}, {u'group': u'N1', u'word': u'Panika', u'fix_time': u'1.1798588357628086'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.2361563466237815'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.83701041078772487'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.3296393666134321'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.88054972627593231'}, {u'group': u'N1', u'word': u'Bezradno\u015b\u0107', u'fix_time': u'1.0728687407006832'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'1.0113805886032416'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.88505295762398395'}, {u'group': u'N1', u'word': u'Za\u0142amanie', u'fix_time': u'0.88903734827672598'}, {u'group': u'N1', u'word': u'drewno', u'fix_time': u'0.69229806977820929'}, {u'group': u'N1', u'word': u'Zaka\u017cenie', u'fix_time': u'1.4718958411903273'}]
    trialListFile = words.csv
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    Routine trial
    Routine blink
    Routine blink_sth
  LoopTerminator trials
  Routine bye
